<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:UclOpenYMaze;assembly=Extensions"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p2="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:p3="clr-namespace:;assembly=Extensions"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="SessionPath" />
        <Property Name="RigPath" />
        <Property Name="TaskPath" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ReadSchemas</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" DisplayName="SessionPath" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:ReadAllText">
                <io:Path>..\local\ExperimentSession.json</io:Path>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RawSessionSchema</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" DisplayName="RigPath" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:ReadAllText">
                <io:Path>..\local\UclOpenYMazeRig.json</io:Path>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RawRigSchema</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" DisplayName="TaskPath" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:ReadAllText">
                <io:Path>..\local\UclOpenYMazeTaskLogic.json</io:Path>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RawTaskSchema</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="9" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="9" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source3" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LoadSchemas</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawSessionSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:ExperimentSession" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>SessionSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawRigSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:UclOpenYMazeRig" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawTaskSchema</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:UclOpenYMazeTaskLogic" />
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TaskParameters</Selector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicParameters</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TaskLogicParameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>RngSeed</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:CreateContinuousUniform">
                <p2:Lower>0</p2:Lower>
                <p2:Upper>10</p2:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:Sample" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>CheckNull</scr:Name>
              <scr:Expression>Item1.HasValue ? Item1.Value : Item2</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RngSeedValue</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Seed" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed>9</num:Seed>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RngSeed</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="19" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source2" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>VisualEnvironment</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>1600</gl:Width>
                <gl:Height>480</gl:Height>
                <gl:VSync>On</gl:VSync>
                <gl:SwapSync>true</gl:SwapSync>
                <gl:ClearColor>Black</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>true</gl:CursorVisible>
                <gl:Location xsi:nil="true" />
                <gl:WindowBorder>Resizable</gl:WindowBorder>
                <gl:WindowState>Normal</gl:WindowState>
                <gl:DisplayDevice>Primary</gl:DisplayDevice>
                <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>2</gl:Buffers>
                  <gl:Stereo>false</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
              <Left>0</Left>
              <Right>1</Right>
              <Bottom>0</Bottom>
              <Top>1</Top>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>DrawCall</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Int32">
              <rx:Name>DrawCircleTo</rx:Name>
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>DrawCircleTo</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>ScreenIndex</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DrawCall</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ScreenIndex</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCircle.bonsai">
                    <Diameter>0.1</Diameter>
                    <LocationX>0.5</LocationX>
                    <LocationY>0.5</LocationY>
                    <Layer>0</Layer>
                    <ColorR>1</ColorR>
                    <ColorG>1</ColorG>
                    <ColorB>1</ColorB>
                    <ColorA>1</ColorA>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TaskLogicParameters</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>NScreens</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>Convert.ToDouble(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it.Item1 * (1 / it.Item2)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="X" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>1 / it</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Width" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
                    <X>0</X>
                    <Y>0</Y>
                    <Width>0.25</Width>
                    <Height>1</Height>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="5" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="5" To="8" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="17" Label="Source1" />
                  <Edge From="8" To="12" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source2" />
                  <Edge From="11" To="15" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="17" Label="Source2" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source3" />
                  <Edge From="17" To="18" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Int32">
              <rx:Name>StopDrawing</rx:Name>
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>DrawCircleTo</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>ScreenIndex</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DrawCall</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ScreenIndex</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCircle.bonsai">
                    <Diameter>0</Diameter>
                    <LocationX>0.5</LocationX>
                    <LocationY>0.5</LocationY>
                    <Layer>0</Layer>
                    <ColorR>1</ColorR>
                    <ColorG>1</ColorG>
                    <ColorB>1</ColorB>
                    <ColorA>1</ColorA>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TaskLogicParameters</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>NScreens</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>Convert.ToDouble(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it.Item1 * (1 / it.Item2)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="X" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>1 / it</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Width" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
                    <X>-0.25</X>
                    <Y>0</Y>
                    <Width>0.25</Width>
                    <Height>1</Height>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="5" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="5" To="8" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="17" Label="Source1" />
                  <Edge From="8" To="12" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source2" />
                  <Edge From="11" To="15" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="17" Label="Source2" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source3" />
                  <Edge From="17" To="18" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Switch" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="10" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:DoorCommand">
        <rx:Name>DoorCommands</rx:Name>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Int32">
        <rx:Name>ActiveRegion</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>1</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>CameraFeed</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TaskLogicParameters</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Trials</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>DoTrial</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TrialParameters</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialParameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TrialTime</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT30S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialParameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>RegionTriggers</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>TriggerRegion</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>RegionSettings</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CameraFeed</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RegionSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.RegionPolygon</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p3:PointListToRegion" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="Regions" Selector="Item2" />
                    </PropertyMappings>
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:CropPolygon">
                      <cv:Regions>
                        <cv:ArrayOfPoint>
                          <cv:Point>
                            <cv:X>391</cv:X>
                            <cv:Y>252</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>482</cv:X>
                            <cv:Y>252</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>482</cv:X>
                            <cv:Y>336</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>391</cv:X>
                            <cv:Y>336</cv:Y>
                          </cv:Point>
                        </cv:ArrayOfPoint>
                      </cv:Regions>
                      <cv:MaskType>ToZero</cv:MaskType>
                      <cv:FillValue>
                        <cv:Val0>0</cv:Val0>
                        <cv:Val1>0</cv:Val1>
                        <cv:Val2>0</cv:Val2>
                        <cv:Val3>0</cv:Val3>
                      </cv:FillValue>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RegionSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.Threshold</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="ThresholdValue" Selector="Item2" />
                    </PropertyMappings>
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:Threshold">
                      <cv:ThresholdValue>40</cv:ThresholdValue>
                      <cv:MaxValue>255</cv:MaxValue>
                      <cv:ThresholdType>BinaryInv</cv:ThresholdType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:Sum" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Val0</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RegionSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.SumThreshold</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="Value" Selector="Item2" />
                    </PropertyMappings>
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="DoubleProperty">
                      <Value>44000</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:DistinctUntilChanged" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>Active</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RegionSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Key</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>Convert.ToInt32(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>Inactive</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>-1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="7" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="12" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="19" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source2" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="22" To="29" Label="Source1" />
                  <Edge From="23" To="27" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="26" To="27" Label="Source2" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="28" To="31" Label="Source1" />
                  <Edge From="29" To="30" Label="Source1" />
                  <Edge From="30" To="31" Label="Source2" />
                  <Edge From="31" To="32" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>ActiveRegion</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ActiveRegion</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>ValidRegion</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="GreaterThanOrEqual">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Convert.ToString(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialParameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TriggerDoorMapping</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Value" Selector="Item1" />
              </PropertyMappings>
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="StringProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>DoorCommands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialParameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TriggerVisualMapping</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Value" Selector="Item1" />
              </PropertyMappings>
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="StringProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>ScreenId</Selector>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>DrawCircleTo</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>InvalidRegion</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="GreaterThanOrEqual">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StopDrawing</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="14" To="31" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="19" Label="Source1" />
            <Edge From="16" To="26" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source2" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source2" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>